PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1800, 1169]
  expName = wordtest
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        화면에 제시되는 글자를 보고 어절이면 '/', 비어절이면 'z' 를 최대한 빠르게 눌러주시기 바랍니다.

        준비가 완료되었다면, space를 눌러 실험을 시작해 주시기 바랍니다.

        먼저 연습시행을 진행합니다. 연습시행에서는 본 시행에 앞서 프로그램을 연습해보고, 정답 및 오답여부를 실시간으로 확인할 수 있습니다.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Fixation
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = +
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  Routine stimuli
    KeyboardComponent key_resp_4
      allowedKeys = 'z', 'slash'
      correctAns = $coranswer
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      storeCorrect = True
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    TextComponent text_3
      letterHeight = 0.05
      pos [set every repeat] = (visualfield, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text [set every repeat] = $name
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  Routine ITI
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        iti = 0
        maxDur = 3
        minDur = 1
      Begin Routine:
        iti = minDur + (maxDur - minDur) * random()
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = $iti
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  Routine goodbye
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        끝
  Routine feedback
    CodeComponent code_2
      Code Type = Py
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      Begin Experiment:
        msg_pr = 'doh!'
      Begin Routine:
        if not key_resp_4.keys:
            msg_pr = "반응이 입력되지 않았습니다.\n"
        elif key_resp_4.corr or key_resp_4.keys == coranswer:
            msg_pr = "정답입니다!"
        else:
            msg_pr= "오답입니다!\n"
        print(msg_pr, key_resp_4.keys, key_resp_4.corr)
        text_6.setText(msg_pr)
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = $msg_pr
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  Routine instruction
    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        연습 시행이 종료되었습니다.

        <Space> 를 누르면 본 시행을 시작합니다.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine trial
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = stimulus_trial.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'id': 1, 'name': '가르침을', 'coranswer': 'z', 'visualfield': -0.3},
      {'id': 2, 'name': '하늘빛', 'coranswer': 'z', 'visualfield': 0.3},
      {'id': 3, 'name': '아침리에', 'coranswer': 'slash', 'visualfield': -0.3},
      {'id': 4, 'name': '우리충을', 'coranswer': 'slash', 'visualfield': 0.3},
      {'id': 5, 'name': '날라뼈와', 'coranswer': 'slash', 'visualfield': -0.3}]
    Routine Fixation
    Routine stimuli
    Routine ITI
    Routine feedback
  LoopTerminator practice
  Routine instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stimulus_new.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'id': 1, 'name': '개구리는', 'lexicality': 1, 'visualfield': 1, 'type': 1},
      {'id': 2, 'name': '고구마는', 'lexicality': 1, 'visualfield': 1, 'type': 1},
      {'id': 3, 'name': '골짜기가', 'lexicality': 1, 'visualfield': 1, 'type': 1},
      {'id': 4, 'name': '궁둥이가', 'lexicality': 1, 'visualfield': 1, 'type': 1},
      {'id': 5, 'name': '그림자를', 'lexicality': 1, 'visualfield': 1, 'type': 1},
      {'id': 6, 'name': '농땡이를', 'lexicality': 1, 'visualfield': 1, 'type': 1},
      {'id': 7, 'name': '대통령의', 'lexicality': 1, 'visualfield': 1, 'type': 1},
      {'id': 8, 'name': '두꺼비의', 'lexicality': 1, 'visualfield': 1, 'type': 1},
      {'id': 9, 'name': '마무리와', 'lexicality': 1, 'visualfield': 1, 'type': 1},
      {'id': 10, 'name': '망아지와', 'lexicality': 1, 'visualfield': 1, 'type': 1},
      {'id': 11, 'name': '며느리로', 'lexicality': 1, 'visualfield': 1, 'type': 1},
      {'id': 12, 'name': '민들레랑', 'lexicality': 1, 'visualfield': 1, 'type': 1},
      {'id': 13, 'name': '바가지만', 'lexicality': 1, 'visualfield': 1, 'type': 1},
      {'id': 14, 'name': '병아리도', 'lexicality': 1, 'visualfield': 1, 'type': 1},
      {'id': 15, 'name': '부엉이만', 'lexicality': 1, 'visualfield': 1, 'type': 1},
      {'id': 16, 'name': '시치미도', 'lexicality': 1, 'visualfield': 1, 'type': 1},
      {'id': 17, 'name': '심부름과', 'lexicality': 1, 'visualfield': 1, 'type': 1},
      {'id': 18, 'name': '쓰레기는', 'lexicality': 1, 'visualfield': 1, 'type': 1},
      {'id': 19, 'name': '아가씨를', 'lexicality': 1, 'visualfield': 1, 'type': 1},
      {'id': 20, 'name': '아버지의', 'lexicality': 1, 'visualfield': 1, 'type': 1}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
    Routine Fixation
    Routine stimuli
    Routine ITI
  LoopTerminator trials
  Routine goodbye
